PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = feedbackInTheMagnet
  Screen = 1
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Routines
  Routine subjective
    ImageComponent imgRate_1
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      image = SubjRating.png
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    KeyboardComponent keyResp_Rate_1
      stopVal [duration (s)] = 2.5
      forceEndRoutine = False
      allowedKeys = '1', '2', '3'
      startVal [time (s)] = 0.0
      store = first key
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    ParallelOutComponent p_port_5
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 7
  Routine decideOnStimulus_2
    TextComponent initStimulus
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    ImageComponent image
      stopVal [duration (s)] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
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  Routine decideOnStimulus
  Routine fixation_2
    TextComponent fixationTrial
      stopVal [duration (s)] = 0.5
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    ParallelOutComponent p_port_2
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 5
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine stimulus
    TextComponent text
      stopVal [duration (s)] = 15.0
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    ImageComponent stim
      stopVal [duration (s)] = 15.0
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus
      size = (1,1)
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    ParallelOutComponent p_port_7
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 1.0
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 1
    ImageComponent sentence
      stopVal [duration (s)] = 15.0
      pos = (0, -0.75)
      startVal [time (s)] = 0.0
      image = C:\Users\NOA\Noam_cloned\pictures\badText1.png
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  Routine welcome
    ImageComponent imgStartExp
      startVal [time (s)] = 0.0
      image = start.png
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    KeyboardComponent expStart_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine gif_test
    MovieComponent movie
      movie = RatingInProgressB.wmv
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      backend = moviepy
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  Routine jitter1
    TextComponent jitt_1
      stopVal [duration (s)] = $jitter1
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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  Routine feedback_3
    ImageComponent scaleImage
      stopVal [duration (s)] = 8
      startVal [time (s)] = 0.0
      image = scale.png
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    RatingScaleComponent rating
      pos = 0.01,-0.04
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 1.53
      tickHeight = 1
      showAccept = False
      forceEndRoutine = False
      stopVal [duration (s)] = 8
      visualAnalogScale = True
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    ParallelOutComponent p_port_3
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 8
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 6
  Routine jitter2
    TextComponent jitt_2
      stopVal [duration (s)] = $jitter2
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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  Routine arrow
    ImageComponent ar_st
      stopVal [duration (s)] = 0.75
      startVal [time (s)] = 0.0
      image [set every repeat] = $direction
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 0.75
      forceEndRoutine = True
      allowedKeys = '1','4'
      startVal [time (s)] = 0.0
      store = first key
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  Routine startFixation
    TextComponent fixationStart
      stopVal [duration (s)] = 0.5
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    ParallelOutComponent p_port
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 1
  Routine bye
    ImageComponent image_4
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      image = end.png
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  Routine feedback2
    RatingScaleComponent rating_2
      pos = 0,-0.1
      storeRating = False
      startVal [time (s)] = 0.0
      size = 1.5
      tickHeight = 1
      showAccept = False
      storeRatingTime = False
      forceEndRoutine = False
      stopVal [duration (s)] = 5
      categoryChoices = , , , , , , , , , ,
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    ImageComponent scaleAnt_2
      stopVal [duration (s)] = 5
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $feedbackFemale
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    ImageComponent blank_2
      stopVal [duration (s)] = 5
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      image = blank.png
      size = [1.5, 0.5]
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    ParallelOutComponent p_port_6
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 6
    RatingScaleComponent rating_3
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      stopVal [duration (s)] = 5
      categoryChoices = , , , , , , , , , ,
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  Routine response
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 1.5
      forceEndRoutine = True
      allowedKeys = '1','4'
      startVal [time (s)] = 0.0
      store = first key
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  Routine feedback
    ImageComponent imgFeedback
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image [set every repeat] = $feedbackMale
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    ParallelOutComponent p_port_4
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = $triggerList
Flow
  LoopInitiator runs loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine welcome
    Routine startFixation
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = blocksList.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'jitter1': 1.653, 'stimulus': u'pictures\\bad1.png', 'jitter2': 0.847},
        {'jitter1': 1.736, 'stimulus': u'pictures\\neutral1.png', 'jitter2': 0.764},
        {'jitter1': 1.653, 'stimulus': u'pictures\\bad2.png', 'jitter2': 0.847},
        {'jitter1': 1.736, 'stimulus': u'pictures\\neutral2.png', 'jitter2': 0.764},
        {'jitter1': 1.653, 'stimulus': u'pictures\\bad1.png', 'jitter2': 0.847},
        {'jitter1': 1.736, 'stimulus': u'pictures\\neutral1.png', 'jitter2': 0.764},
        {'jitter1': 1.653, 'stimulus': u'pictures\\bad1.png', 'jitter2': 0.847},
        {'jitter1': 1.736, 'stimulus': u'pictures\\neutral1.png', 'jitter2': 0.764},
        {'jitter1': 1.653, 'stimulus': u'pictures\\bad2.png', 'jitter2': 0.847},
        {'jitter1': 1.736, 'stimulus': u'pictures\\neutral2.png', 'jitter2': 0.764},
        {'jitter1': 1.653, 'stimulus': u'pictures\\bad2.png', 'jitter2': 0.847},
        {'jitter1': 1.736, 'stimulus': u'pictures\\neutral2.png', 'jitter2': 0.764},
        {'jitter1': 1.653, 'stimulus': u'pictures\\bad1.png', 'jitter2': 0.847},
        {'jitter1': 1.736, 'stimulus': u'pictures\\neutral1.png', 'jitter2': 0.764},
        {'jitter1': 1.653, 'stimulus': u'pictures\\bad2.png', 'jitter2': 0.847},
        {'jitter1': 1.736, 'stimulus': u'pictures\\neutral2.png', 'jitter2': 0.764}]
      Routine fixation_2
      Routine jitter1
      Routine decideOnStimulus_2
      Routine stimulus
      Routine jitter2
      Routine feedback_3
      LoopInitiator arrowsGame loopType="TrialHandler"
        conditionsFile = arrows.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'direction': u'left.png'},
          {'direction': u'right.png'},
          {'direction': u'left.png'},
          {'direction': u'right.png'},
          {'direction': u'left.png'},
          {'direction': u'right.png'}]
        Routine arrow
        Routine response
      LoopTerminator arrowsGame
    LoopTerminator trials
  LoopTerminator runs
