PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = feedbackInTheMagnet
  Screen = 1
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Routines
  Routine subjective
    ImageComponent imgRate_1
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      image = SubjRating.png
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    KeyboardComponent keyResp_Rate_1
      stopVal [duration (s)] = 2.5
      forceEndRoutine = False
      allowedKeys = '1', '2', '3'
      startVal [time (s)] = 0.0
      store = first key
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    ParallelOutComponent p_port_5
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 7
  Routine painFeedbackRoutine
    ParallelOutComponent p_port_3
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 15
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 6
    KeyboardComponent painRating
      stopVal [duration (s)] = 15
      forceEndRoutine = False
      allowedKeys = '0','1','2','3','4','5','6','7','8','9','10', 'space'
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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    TextComponent painRatingText
      text = Insert pain rating (0-10)
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine fixation_2
    TextComponent fixationTrial
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    ParallelOutComponent p_port_2
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 5
  Routine stimulus
    TextComponent text
      text = +
      stopVal [duration (s)] = 9.0
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    ParallelOutComponent p_port_7
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 1.0
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 1
  Routine welcome
    KeyboardComponent expStart_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent startNewLocation
      text = Start VAS tests for new location
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine gif_test
    MovieComponent movie
      movie = RatingInProgressB.wmv
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      backend = moviepy
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  Routine jitter1
    TextComponent jitt_1
      stopVal [duration (s)] = $jitter1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine jitter2
    TextComponent jitt_2
      stopVal [duration (s)] = $jitter2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine arrow
    ImageComponent ar_st
      stopVal [duration (s)] = 0.75
      startVal [time (s)] = 0.0
      image [set every repeat] = $direction
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 0.75
      forceEndRoutine = True
      allowedKeys = '1','4'
      startVal [time (s)] = 0.0
      store = first key
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  Routine startFixation
    TextComponent fixationStart
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    ParallelOutComponent p_port
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 1
  Routine bye
    ImageComponent image_4
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      image = end.png
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  Routine feedback2
    RatingScaleComponent rating_2
      pos = 0,-0.1
      storeRating = False
      startVal [time (s)] = 0.0
      size = 1.5
      tickHeight = 1
      showAccept = False
      storeRatingTime = False
      forceEndRoutine = False
      stopVal [duration (s)] = 5
      categoryChoices = , , , , , , , , , ,
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    ImageComponent scaleAnt_2
      stopVal [duration (s)] = 5
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $feedbackFemale
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    ImageComponent blank_2
      stopVal [duration (s)] = 5
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      image = blank.png
      size = [1.5, 0.5]
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    ParallelOutComponent p_port_6
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = 6
    RatingScaleComponent rating_3
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      stopVal [duration (s)] = 5
      categoryChoices = , , , , , , , , , ,
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  Routine response
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 1.5
      forceEndRoutine = True
      allowedKeys = '1','4'
      startVal [time (s)] = 0.0
      store = first key
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  Routine feedback
    ImageComponent imgFeedback
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image [set every repeat] = $feedbackMale
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    ParallelOutComponent p_port_4
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = 0.0
      startData = $triggerList
Flow
  LoopInitiator locationsLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 8
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    Routine welcome
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = VAS_order1.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'vas': 2},
        {'vas': 5},
        {'vas': 8}]
      Routine stimulus
      Routine painFeedbackRoutine
    LoopTerminator trials
  LoopTerminator locationsLoop
